CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:30
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Choose for each
    Metadata types:{"FileLocation": "text", "Frame": "integer", "Plate": "text", "Series": "integer", "Site": "integer", "Well": "text"}
    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.*)-(?P<Well>[A-P][0-9]{2})_p(?P<Site>[0-9])t0.ome.tif
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    Extract metadata from:All images
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    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Frame "0")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Frame "1")
    Name to assign these images:gH2AX
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (metadata does Frame "2")
    Name to assign these images:Actin
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (metadata does Frame "3")
    Name to assign these images:CM
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['Identify the nuclei from the DAPI image.']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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei_raw
    Typical diameter of objects, in pixel units (Min,Max):10,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:2.6976
    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:200
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    Thresholding method:Otsu

RescaleIntensity:[module_num:6|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notes:['']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
    Select the input image:Actin
    Name the output image:Actin_rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:7|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
    Select the input image:gH2AX
    Name the output image:gH2AX_rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:8|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
    Select the input image:DNA
    Name the output image:DNA_rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:9|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
    Select the input image:CM
    Name the output image:CM_rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
ImageMath:[module_num:10|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:WholeCell_image
    Image or measurement?:Image
    Select the first image:Actin_rescaled
    Multiply the first image by:1.5
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    Image or measurement?:Image
    Select the second image:CM_rescaled
    Multiply the second image by:1.0
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
IdentifySecondaryObjects:[module_num:11|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
    Select the input objects:Nuclei_raw
    Name the objects to be identified:WholeCell_raw
    Select the method to identify the secondary objects:Propagation
    Select the input image:WholeCell_image
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:2.6976
    Threshold correction factor:0.9
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:200
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    Thresholding method:Otsu

MeasureObjectSizeShape:[module_num:12|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
    Select object sets to measure:WholeCell_raw
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:13|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
    Select the objects to filter:WholeCell_raw
    Name the output objects:WholeCell_raw_size_filtered
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:200
    Filter using a maximum measurement value?:Yes
    Maximum value:20000
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
FilterObjects:[module_num:14|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
    Select the objects to filter:WholeCell_raw_size_filtered
    Name the output objects:WholeCell
    Select the filtering mode:Image or mask border
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    Additional object count:1
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    Keep removed objects as a separate set?:No
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    Select additional object to relabel:Nuclei_raw
    Name the relabeled objects:Nuclei
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
ConvertObjectsToImage:[module_num:15|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notes:['Export the cell Mask']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
    Select the input objects:WholeCell
    Name the output image:CellMask
    Select the color format:uint16
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
IdentifyTertiaryObjects:[module_num:16|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notes:['Identify the cytoplasm by "subtracting" the nuclei objects from the cell objects.']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
    Select the larger identified objects:WholeCell
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

SaveImages:[module_num:17|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
    Select the type of image to save:Image
    Select the image to save:CellMask
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_CellMask
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExpandOrShrinkObjects:[module_num:18|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enabled:False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
    Select the input objects:WholeCell
    Name the output objects:WholeCell_shrunk
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
    Fill holes in objects so that all objects shrink to a single point?:No
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
MaskImage:[module_num:19|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enabled:False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
    Select the input image:DNA_rescaled
    Name the output image:DNA_rescaled_masked
    Use objects or an image as a mask?:Objects
    Select object for mask:WholeCell_shrunk
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    Invert the mask?:No

MaskImage:[module_num:20|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enabled:False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
    Select the input image:Actin_rescaled
    Name the output image:Actin_rescaled_masked
    Use objects or an image as a mask?:Objects
    Select object for mask:WholeCell_shrunk
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    Invert the mask?:No

MaskImage:[module_num:21|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enabled:False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
    Select the input image:gH2AX_rescaled
    Name the output image:gH2AX_rescaled_masked
    Use objects or an image as a mask?:Objects
    Select object for mask:WholeCell_shrunk
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:22|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enabled:False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
    Select the input image:DNA_rescaled_masked
    Name the primary objects to be identified:DNA_objects
    Typical diameter of objects, in pixel units (Min,Max):2,1000000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:2
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
RelateObjects:[module_num:23|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enabled:False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
    Parent objects:WholeCell
    Child objects:DNA_objects
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
IdentifyPrimaryObjects:[module_num:24|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enabled:False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
    Select the input image:gH2AX_rescaled_masked
    Name the primary objects to be identified:gH2AX_objects
    Typical diameter of objects, in pixel units (Min,Max):2,1000000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.25
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
RelateObjects:[module_num:25|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enabled:False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
    Parent objects:WholeCell
    Child objects:gH2AX_objects
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
IdentifyPrimaryObjects:[module_num:26|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enabled:False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
    Select the input image:Actin_rescaled_masked
    Name the primary objects to be identified:Actin_objects
    Typical diameter of objects, in pixel units (Min,Max):2,1000000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.75
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
RelateObjects:[module_num:27|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enabled:False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
    Parent objects:WholeCell
    Child objects:Actin_objects
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
MeasureObjectSizeShape:[module_num:28|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notes:['Measure morphological features from the cell, nuclei and cytoplasm objects.']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enabled:False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
    Select object sets to measure:Actin_objects, Cytoplasm, DNA_objects, Nuclei, WholeCell, gH2AX_objects
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:29|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notes:['Measure intensity features from nuclei and cell objects against the cropped DAPI image.']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enabled:False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
    Select images to measure:Actin, CM, DNA, gH2AX
    Select objects to measure:Actin_objects, Cytoplasm, DNA_objects, Nuclei, WholeCell, gH2AX_objects

ExportToSpreadsheet:[module_num:30|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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Nuclei|Intensity_MassDisplacement_CM,Nuclei|Intensity_MassDisplacement_gH2AX,Nuclei|Intensity_MassDisplacement_DNA,Nuclei|Intensity_MassDisplacement_Actin,Nuclei|Intensity_StdIntensity_Actin,Nuclei|Intensity_StdIntensity_gH2AX,Nuclei|Intensity_StdIntensity_CM,Nuclei|Intensity_StdIntensity_DNA,Nuclei|Intensity_MeanIntensity_CM,Nuclei|Intensity_MeanIntensity_gH2AX,Nuclei|Intensity_MeanIntensity_DNA,Nuclei|Intensity_MeanIntensity_Actin,Nuclei|Intensity_MinIntensityEdge_DNA,Nuclei|Intensity_MinIntensityEdge_Actin,Nuclei|Intensity_MinIntensityEdge_CM,Nuclei|Intensity_MinIntensityEdge_gH2AX,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:HIPPTox_Lung_
    Overwrite existing files without warning?:Yes
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